<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0-preview1+76e8ce94db5dd636925244a720164ef8694af513"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ProcessingPipeline</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>128</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>