<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0-preview1+76e8ce94db5dd636925244a720164ef8694af513"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>Video Processing</Name>
        <Text><![CDATA[# Summary

This workflow is used to [segment](https://en.wikipedia.org/wiki/Thresholding_(image_processing)) images from a grayscale video stream and compute the sequence of high contrast dark objects using the [Bonsai.Vision](https://bonsai-rx.org/docs/api/Bonsai.Vision.html) package.

## Properties

| Name | Description |
| :--- | :---------- |
| `Index` | *The index of the video camera to connect to.* |
| `ThresholdValue` | *The segmentation value (0-255). Pixels below this threshold will be considered as part of an object.* |

## Example pipeline output

| Camera | Grayscale | Threshold | BinaryRegion |
| :----: | :-------: | :-------: | :----------: |
| ![raw](assets/pipeline_01-raw.png) | ![raw](assets/pipeline_02-gray.png) | ![raw](assets/pipeline_03-thresh.png) | ![raw](assets/pipeline_04-blobs.png) |
| Raw frames from a video camera | Convert pixels to grayscale | Inverse threshold to find dark objects | Find regions of connected pixels |]]></Text>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Index" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ThresholdValue" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>77</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Audio Processing</Name>
        <Text><![CDATA[# Summary

## Properties]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:SampleRate>44100</al:SampleRate>
          <al:SampleFormat>Mono16</al:SampleFormat>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>