<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Experiment;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>..\..\src\json\experiment-example.json</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromJson">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Experiment" />
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>MyExperiment</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Trial">
        <rx:Name>TrialLogging</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SerializeToJson" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:JsonWriter">
          <p2:Path>../data/demo1.json</p2:Path>
          <p2:Suffix>None</p2:Suffix>
          <p2:Overwrite>false</p2:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MyExperiment</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Trials</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>The Last Trial Bonus!</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Trial">
          <p1:InterTrialInterval>0.1</p1:InterTrialInterval>
          <p1:RewardAmount>10</p1:RewardAmount>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>CreateTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Trial</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialLogging</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>InterTrialInterval</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>ToSeconds</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GiveReward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Trial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RewardAmount</Selector>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>"Animal received {0} reward!"</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:WriteLine" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>